MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\neil.hamilton\Documents\MATLAB\picosdk-ps6000a-matlab-instrument-driver\picotech_ps6000a_generic.mdd
DriverType: MATLAB generic
InstrumentType: Oscilloscope
InstrumentManufacturer: Pico Technology Ltd.
InstrumentModel: PicoScope 6000E Series
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2020 Pico Technology Ltd.  All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        fprintf('PicoScope 6000 Series (A API) MATLAB Instrument Driver');
        fprintf('\n');
        fprintf('\nCopyright © 2020 Pico Technology Ltd.  All rights reserved. \n')
        fprintf('\n');

        % Load libraries
        % ==============

        % Only load library once

        if (libisloaded('ps6000a'))

               % do nothing

        else

            if (ismac())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('libps6000a.dylib', @ps6000aMFile, 'alias', 'ps6000a');

            elseif (isunix())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('libps6000a.so', @ps6000aMFile, 'alias', 'ps6000a');

            elseif (ispc())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('ps6000a.dll', @ps6000aMFile);

            else

                % do nothing

            end

        end

        % Load in enums and structures

        [~, obj.DriverData.structs, obj.DriverData.enums, ~] = ps6000aMFile();

ConnectInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2020 Pico Technology Ltd. All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        disp('Opening PicoScope 6000 Series (A API) device');

        % Structure to hold satus values while connectin.
        connectStatus = [];

        % Temporary variable to store handle value
        unitHandle = 0;

        picoOK = PicoStatus.PICO_OK;

        % Obtain serial number input
        serialNum = get(obj, 'RsrcName');

        % determine if serial number given
        if length(serialNum) > 0

            unitSerial = serialNum;

        else

            unitSerial = [];

        end

        % Open with 8 bit resolution
        resolution8bit = obj.DriverData.enums.enPicoDeviceResolution.PICO_DR_8BIT;
        obj.DriverData.resolution = resolution8bit;

        [connectStatus.openUnit, obj.DriverData.unitHandle, ~] = ...
            calllib('ps6000a','ps6000aOpenUnit',unitHandle, unitSerial,resolution8bit);

        % Validate handle
        if (obj.DriverData.unitHandle > 0)

            unithandle = obj.DriverData.unitHandle;
    %
            % Set serial
            infoLine = blanks(40);
            reqSize = length(infoLine);

    %         [connectStatus.unitSerial, obj.DriverData.unitSerial, reSize] = ...
    %             calllib('ps6000a','ps6000aGetUnitInfo',unitHandle,infoLine, ...
    %             length(infoLine),reqSize,PicoStatus.PICO_BATCH_AND_SERIAL);
    %
    %         % Set variant
            infoLineV = blanks(15);
            reqSizeV = 15;
    %
    %         [connectStatus.unitVariant, variant, ~] = calllib('ps6000a', ...
    %             'ps6000aGetUnitInfo', unitHandle, infoLineV, length(infoLineV),...
    %             reqSizeV, PicoStatus.PICO_VARIANT_INFO);
    %
    %         set(obj, 'InstrumentModel', variant);
    %
    %         % Set channel count
    %         obj.DriverData.channelCount = str2num(obj.InstrumentModel(2));
    %
        elseif (connectStatus.openUnit == PicoStatus.PICO_NOT_FOUND)

            error('No unit found, please check connections.');

        else

            error('Status code: %d\n', connectStatus.openUnit);

        end

CleanupCode
  Code:
    function cleanup(obj)
    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
        if (isfield(obj.DriverData, 'unitHandle'))

            unitHandle = obj.DriverData.unitHandle;

            if (isempty(unitHandle))
                return;
            end

            if (~libisloaded('ps6000a'))

                return

            end

            % Close scope

            disconnectStatus = calllib('ps6000a','ps6000aCloseUnit', unitHandle);

            if (disconnectStatus == PicoStatus.PICO_OK)

                fprintf(['PicoScope closed successfully.\n']);

            elseif (disconnectStatus == PicoStatus.PICO_INVALID_HANDLE)

                return

            else

    %             if (isfield(obj.DriverData, 'unitSerial'))
    %
    %                 error('Disconnect: ConnectionNotClosed',...
    %                     ['Connection to PicoScope not closed. Status code %d\n']...
    %                     ,disconnectStatus);
    %
    %             end

            end

    %         % unload libraries if no other scopes are connected
    %
    %         firestHandle = 0;
    %
    %         if (ispc())
    %
    %             firstHandle = 16384; % Windows PC
    %
    %         else

        else
            warning('Disconnect:NoDevicesFound', 'Disconnect: No devices found.');
        end
    %
    %             firstHandle = 1; % Mac and Linux
    %
    %         end
    %
    %         % test connection to other handles
    %         lastHandle = firstHandle + 63 % obj.DriverData.constants.PICO_MAX_UNITS

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property channelCount
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property resolution
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitHandle
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitSerial
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method ps6000aGetAdcLimits
    MCode:
      function status = ps6000aGetAdcLimits(obj, resolution, minValue, maxValue)
      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
          status = calllib('ps6000a','ps6000aGetAdcLimits', obj.DriverData.unitHandle, resolution, minValue, maxValue);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aGetAdcLimits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aGetMinimumTimebaseStateless
    MCode:
      function status = ps6000aGetMinimumTimebaseStateless(obj, enabledChannelFlags, timebase, timeInterval, resolution)
      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
              status = calllib('ps6000a','ps6000aGetMinimumTimebaseStateless', obj.DriverData.unitHandle, enabledChannelFlags,...
              timebase, timeInterval, resolution);

              if (status == PicoStatus.PICO_OK)

              else

                  error('ps6000aGetMinimumTimebaseStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

              end

  Method ps6000aGetStreamingLatestValues
    MCode:
      function status = ps6000aGetStreamingLatestValues(obj, streamingDataInfo, nStreamingDataInfos, triggerInfo)
      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
          status = calllib('ps6000a','ps6000aGetStreamingLatestValues',obj.DriverData.unitHandle,...
              streamingDataInfo, nStreamingDataInfos, triggerInfo);

  Method ps6000aGetValues
    MCode:
      function status = ps6000aGetValues(obj, startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex, overflow)
      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

          [status] = calllib('ps6000a','ps6000aGetValues',obj.DriverData.unitHandle,...
              startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex, overflow);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aGetValues: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aIsReady
    MCode:
      function status = ps6000aIsReady(obj, ready)
      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
          status = calllib('ps6000a','ps6000aIsReady',obj.DriverData.unitHandle,ready);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aGetMinimumTimebaseStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aRunBlock
    MCode:
      function status = ps6000aRunBlock(obj, noOfPreTriggerSamples, noOfPostTriggerSamples, timebase,timeIndisposedMs, segmentIndex)
      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
      % no inputs for lpReady or pParameter as these are for callbacks that aren't
      % used

          lpReady = [];
          pParameter = [];

          status = calllib('ps6000a','ps6000aRunBlock',obj.DriverData.unitHandle, noOfPreTriggerSamples,...
              noOfPostTriggerSamples, timebase, timeIndisposedMs, segmentIndex, lpReady, pParameter);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aRunBlock: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aRunStreaming
    MCode:
      function status = ps6000aRunStreaming(obj, sampleInterval, sampleIntervalTimeUnits, maxPreTriggerSamples, maxPostTriggerSamples, autoStop, downSampleRatio, downSampleRatioMode)
      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
          status = calllib('ps6000a', 'ps6000aRunStreaming', obj.DriverData.unitHandle, sampleInterval,...
              sampleIntervalTimeUnits, maxPreTriggerSamples, maxPostTriggerSamples, autoStop,...
              downSampleRatio, downSampleRatioMode);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aRunStreaming: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetChannelOff
    MCode:
      function status = ps6000aSetChannelOff(obj, channel)
      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
          status = calllib('ps6000a','ps6000aSetChannelOff', obj.DriverData.unitHandle, channel);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetChannelOff: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetChannelOn
    MCode:
      function status = ps6000aSetChannelOn(obj, channel, coupling, range, analogueOffset, bandwidth)
      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
          status = calllib('ps6000a', 'ps6000aSetChannelOn', obj.DriverData.unitHandle,...
              channel, coupling, range, analogueOffset, bandwidth);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetChannelOn: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetDataBuffer
    MCode:
      function status = ps6000aSetDataBuffer(obj, channel, buffer, nSamples, dataType, waveform, downSampleRatioMode, action)
      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

          status = calllib('ps6000a','ps6000aSetDataBuffer', obj.DriverData.unitHandle,channel, buffer, nSamples,...
              dataType, waveform, downSampleRatioMode, action);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetDataBuffer: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetDataBuffers
    MCode:
      function status = ps6000aSetDataBuffers(obj, channel, bufferMax, bufferMin, nSamples, dataType, waveform, downSampleRatioMode, action)
      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
          status = calllib('ps6000a', 'ps6000aSetDataBuffers', obj.DriverData.unitHandle, channel, bufferMax,...
              bufferMin, nSamples, dataType, waveform, downSampleRatioMode, action);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetDataBuffers: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetDeviceResolution
    MCode:
      function status = ps6000aSetDeviceResolution(obj, resolution)
      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
          status = calllib('ps6000a','ps6000aSetDeviceResolution',obj.DriverData.unitHandle, resolution);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetDeviceResolution: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

          obj.DriverData.resolution = resolution;

  Method ps6000aSetDigitalPortOff
    MCode:
      function status = ps6000aSetDigitalPortOff(obj, port)
      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

          status = calllib('ps6000a', 'ps6000aSetDigitalPortOff', obj.DriverData.unitHandle, port)

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetDigitalPortOff: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetDigitalPortOn
    MCode:
      function status = ps6000aSetDigitalPortOn(obj, port, logicThresholdLevel, logicThresholdLevelLength, hysteresis)
      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
          status = calllib('ps6000a','ps6000aSetDigitalPortOn', obj.DriverData.unitHandle, port,...
              logicThresholdLevel, logicThresholdLevelLength, hysteresis);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetDigitalPortOn: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method ps6000aSetSimpleTrigger
    MCode:
      function status = ps6000aSetSimpleTrigger(obj, enable, source, threshold, direction, delay, autoTriggerMicroSeconds)
      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
          status = calllib('ps6000a','ps6000aSetSimpleTrigger', obj.DriverData.unitHandle, enable, source,...
              threshold, direction, delay, autoTriggerMicroSeconds);

          if (status == PicoStatus.PICO_OK)

          else

              error('ps6000aSetSimpleTrigger: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end
